PsychoPy2experiment version="2020.1.3"
Settings
  Audio lib = pygame
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = MyProject
  exportHTML = manually
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Routines
  Routine Instructions
    TextComponent text_instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Please read the instructions
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    KeyboardComponent key_resp_2
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ConsentForm
    TextComponent Consent_Form
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Form of consent ... 
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    KeyboardComponent key_resp
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ExperimentEnd
    TextComponent End_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = thank you for your participation
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    KeyboardComponent key_resp_4
      allowedKeys = 'esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Recordings
    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        from tkinter import *
        import tkinter.messagebox
        import os
        from pygame import mixer
        root = Tk()
        root.geometry('1200x200+200+200')
        track = StringVar()
        status = StringVar()
        trackframe = LabelFrame(root, text = 'Recording Track', font=('times new roman',15,'bold'), bg='grey', fg='white',bd=5,relief=GROOVE)
        trackframe.place(x=0,y=0,width=600,height=100)
        songtrack = Label(trackframe,textvariable=track,width=20,font=("times new roman",24,"bold"),bg="grey",fg="gold").grid(row=0,column=0,padx=10,pady=5)
        trackstatus = Label(trackframe,textvariable=status,font=("times new roman",24,"bold"),bg="grey",fg="gold").grid(row=0,column=1,padx=10,pady=5)
        buttonframe = LabelFrame(root,text="Control Panel",font=("times new roman",15,"bold"),bg="grey",fg="white",bd=5,relief=GROOVE)
        buttonframe.place(x=0,y=100,width=600,height=100)
        def play_music():
                track.set(playlist.get(ACTIVE))
                status.set('-Playing')
                mixer.music.load(playlist.get(ACTIVE))
                mixer.music.play()
        playbtn=Button(buttonframe,text="PLAY",command=play_music,width=6,height=1,font=("times new roman",16,"bold"),fg="navyblue",bg="gold").grid(row=0,column=0,padx=10,pady=5)
        def pause_music():
            status.set('-Paused')
            mixer.music.pause()
        pauseBtn=Button(buttonframe,text="PAUSE",command=pause_music,width=8,height=1,font=("times new roman",16,"bold"),fg="navyblue",bg="gold").grid(row=0,column=1,padx=10,pady=5)
        def unpause_music():
            status.set('-Playing')
            mixer.music.unpause()
        unpauseBtn=Button(buttonframe,text="UNPAUSE",command=unpause_music,width=10,height=1,font=("times new roman",16,"bold"),fg="navyblue",bg="gold").grid(row=0,column=2,padx=10,pady=5)
        def stop_music():
            status.set('-Stopped')
            mixer.music.stop()
        stopBtn=Button(buttonframe,text="STOP",command=stop_music,width=6,height=1,font=("times new roman",16,"bold"),fg="navyblue",bg="gold").grid(row=0,column=3,padx=10,pady=5)
        songsframe = LabelFrame(root,text="Recording Playlist",font=("times new roman",15,"bold"),bg="grey",fg="white",bd=5,relief=GROOVE)
        songsframe.place(x=600,y=0,width=400,height=200)
        scrol_y = Scrollbar(songsframe,orient=VERTICAL)
        playlist=Listbox(songsframe,yscrollcommand=scrol_y.set,selectbackground="gold",selectmode=SINGLE,font=("times new roman",12,"bold"),bg="silver",fg="navyblue",bd=5,relief=GROOVE)
        scrol_y.pack(side=RIGHT,fill=Y)
        scrol_y.config(command=playlist.yview)
        playlist.pack(fill=BOTH)
        playlist.insert(END, 'Offender.wav','Suspect.wav')
        menubar = Menu(root)
        root.config(menu = menubar)
        subMenu = Menu(menubar, tearoff=0)
        menubar.add_cascade(label='File', menu = subMenu)
        subMenu.add_command(label ='Open')
        subMenu.add_command(label = 'Exit', command = root.destroy)
        def guide():
            tkinter.messagebox.showinfo('Guide', 'Please make sure that your audio is on and that your Internet is working well. If there are still problems, please exit the experiement and start it again. If you get the same problems, please contact the researcher.')
        subMenu = Menu(menubar, tearoff=0)
        menubar.add_cascade(label='Help', menu = subMenu)
        subMenu.add_command(label='Guide', command = guide)
        mixer.init()
        root.title('Recording Player')
        def set_vol(val):
            volume = int(val) / 100
            mixer.music.set_volume(volume)
        scale = Scale(root, from_=0, to=100, orient=HORIZONTAL, command = set_vol)
        scale.set(50)
        mixer.music.set_volume(50)
        scale.pack(side=RIGHT, padx=30)
        root.after(100000, root.quit)
        root.mainloop()
  Routine TaskDescription
    TextComponent description_task
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = description of the task goes here
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    KeyboardComponent key_resp_3
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Decide
    RatingScaleComponent decide_1
      categoryChoices = 1,2,3,4,5,6,7
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      scaleDescription = very likely different, likely different, somewhat different, not sure, somewhat the same, likely the same, very likely the same
      size = 1.0
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine ConsentForm
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Instructions
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine TaskDescription
  LoopTerminator trials_3
  LoopInitiator trials_5 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    LoopInitiator trials_4 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine Recordings
    LoopTerminator trials_4
  LoopTerminator trials_5
  Routine Decide
  Routine ExperimentEnd
